OpenViBE-Scenario(Creator=OpenViBE, CreatorVersion=1.2.1+gmobilab)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Spectral analysis (FFT) => #1
  Spectral components = Amplitude
#1.Amplitude -> Power spectrum display
  Minimum frequency to display = 0
  Maximum frequency to display = 40
#1.Amplitude -> Time-frequency map display
  Time Scale = 10
  Minimum frequency to display = 0
  Maximum frequency to display = 40
Data=#0.Signal stream -> 0xc67a01dc Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#0.Signal stream -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
