PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'voer hier een getal in'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = alpha_threshold
  keyboardBackend = ioHub
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Routines
  Routine countdown
    CodeComponent open_condition
      Code Type = Auto->JS
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      Begin Routine:
        f = open("condition.txt", "w")
        f.write("open")
        f.close()
    TextComponent een
      letterHeight = 0.5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent twee
      letterHeight = 0.5
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent drie
      letterHeight = 0.5
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent vier
      letterHeight = 0.5
      startVal [time (s)] = 3
      stopVal [duration (s)] = 1.0
      text = 4
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    TextComponent vijf
      letterHeight = 0.5
      startVal [time (s)] = 4
      stopVal [duration (s)] = 1.0
      text = 5
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    TextComponent zes
      letterHeight = 0.5
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1.0
      text = 6
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    TextComponent zeven
      letterHeight = 0.5
      startVal [time (s)] = 6
      stopVal [duration (s)] = 1.0
      text = 7
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    TextComponent acht
      letterHeight = 0.5
      startVal [time (s)] = 7
      stopVal [duration (s)] = 1.0
      text = 8
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    TextComponent negen
      letterHeight = 0.5
      startVal [time (s)] = 8
      stopVal [duration (s)] = 1.0
      text = 9
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    TextComponent tien
      letterHeight = 0.5
      startVal [time (s)] = 9
      stopVal [duration (s)] = 1.0
      text = 10
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    TextComponent fixatiekruis
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.25
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine ogen_dicht
    SoundComponent bruh
      sound = C:/Users/david/Documents/python scripts/Brain-Powered-2022-2023-main/Assets/bruh.wav
      startVal [time (s)] = 10
      stopVal [duration (s)] = 1.0
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    CodeComponent closed_condition
      Code Type = Auto->JS
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      Begin Routine:
        f = open("condition.txt", "w")
        f.write("closed")
        f.close()
  Routine korte_countdown
    TextComponent een_kort
      letterHeight = 0.5
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1.0
      text = 1
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    TextComponent twee_kort
      letterHeight = 0.5
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
      text = 2
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    TextComponent drie_kort
      letterHeight = 0.5
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text = 3
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    TextComponent text_2
      color = 1.0000, -1.0000, -1.0000
      letterHeight = 0.1
      pos = (0, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Tijd tot je je ogen moet fixeren:
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  Routine Uitleg
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      wrapWidth = 0.9
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      text:
        Op het volgende scherm ziet u een kruis waarop u zich moet fixeren.
        Doe dit voor 10 seconden.
        Achter het fixatiepunt zult u de timer zien.
        U zult eerst 3 seconden de tijd krijgen voordat u zich moet fixeren. Dan verschijnt het fixatiepunt.
        Nadat de 10 seconden voorbij zijn zult u een geluidseffect horen om te aan te geven dat u mag rusten.
        Dan zult u een tussenscherm zien.
        Na dit tussenscherm krijgt u weer 3 seconden voor de voorbereiding.
        Na de countdown moet u uw ogen 10 seconden lang sluiten. U zal weer een geluidseffect te horen krijgen wanneer deze 10 seconden voorbij is. Dit gehele proces herhaalt 6 keer.


        Druk op de spatiebalk om door te gaan
    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent start_threshold
      Code Type = Auto->JS
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      Begin Routine:
        f = open("condition.txt", "w")
        f.write("start_threshold")
        f.close()
  Routine bedankt__doei
    TextComponent bedanktdoei
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        bedankt. doei

        Druk op de spatiebalk om door te gaan
    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent stop_threshold
      Code Type = Auto->JS
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      Begin Routine:
        f = open("condition.txt", "w")
        f.write("stop_threshold")
        f.close()
  Routine lekker_pik
    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Lekker pik

        Druk op de spatiebalk om door te gaan
    KeyboardComponent key_resp_3
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine leegte
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = k
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Flow
  Routine Uitleg
  LoopInitiator countdownlioop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 10
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    Routine korte_countdown
    Routine countdown
    Routine ogen_dicht
    Routine leegte
    Routine lekker_pik
  LoopTerminator countdownlioop
  Routine bedankt__doei
